# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Moku Pro Frequency Response Analyzer

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Moku_Pro_FRA

# Define that the driver is a Signal Generator
signal_generator: True

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
[IP]
datatype: STRING
def_value: [fe80:0000:0000:0000:7269:79ff:feb0:0470%3]
section: Moku Settings


[Input Ch1 - Coupling]
datatype: COMBO
combo_def_1: DC
combo_def_2: AC
group: Inputs
[Input Ch1 - Impedance]
datatype: COMBO
combo_def_1: 50Ohm
combo_def_2: 1MOhm
group: Inputs

[Input Ch1 - Range]
datatype: COMBO
combo_def_1: 400mVpp
combo_def_2: 4Vpp
combo_def_3: 40Vpp
group: Inputs

[Input Ch2 - Coupling]
datatype: COMBO
combo_def_1: DC
combo_def_2: AC
group: Inputs
[Input Ch2 - Impedance]
datatype:COMBO
combo_def_1: 50Ohm
combo_def_2: 1MOhm
group: Inputs

[Input Ch2 - Range]
datatype: COMBO
combo_def_1: 400mVpp
combo_def_2: 4Vpp
combo_def_3: 40Vpp
group: Inputs



[Sweep Start Freq]
datatype: DOUBLE
unit: Hz
def_value: 1E6
low_lim: 1E-3
group: Sweep

[Sweep End Freq]
datatype: DOUBLE
unit: Hz
def_value: 100
low_lim: 0
high_lim: 300E6
group: Sweep

[Sweep Num-Points]
datatype: DOUBLE
def_value: 512
low_lim: 0
high_lim: 1E6
group: Sweep

[Sweep Averaging-Time]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 1E-6
high_lim: 10
group: Sweep

[Sweep Averaging-Cycles]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 1048576
group: Sweep

[Sweep Settling-Time]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 1E-6
high_lim: 10
group: Sweep


[Sweep Settling-Cycles]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 1048576
group: Sweep

[Sweep Linear]
datatype: BOOLEAN
group: Sweep

[Output Amplitude]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 1
group: Output
[Output Offset]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 0
group: Output

[Output Phase]
datatype: DOUBLE
unit: deg
low_lim: 0
high_lim: 360
def_value: 0
group: Output

[Harmonic Multiplier]
datatype: DOUBLE
low_lim: 1
high_lim: 15
def_value: 1

[Measurement Mode]
datatype: COMBO
combo_def_1: In
combo_def_2: InOut
combo_def_3: InIn1

[Magnitude - Ch1]
unit: dB
x_name: Frequency
x_unit: Hz
datatype: VECTOR
permission: READ

[Phase - Ch1]
x_name: Frequency
x_unit: Hz
unit: deg
datatype: VECTOR
permission: READ

[Magnitude - Ch2]
unit: dB
x_name: Frequency
x_unit: Hz
datatype: VECTOR
permission: READ

[Phase - Ch2]
x_name: Frequency
x_unit: Hz
unit: deg
datatype: VECTOR
permission: READ

[Magnitude - Ch3]
unit: dB
x_name: Frequency
x_unit: Hz
datatype: VECTOR
permission: READ

[Phase - Ch3]
x_name: Frequency
x_unit: Hz
unit: deg
datatype: VECTOR
permission: READ

[Magnitude - Ch4]
unit: dB
x_name: Frequency
x_unit: Hz
datatype: VECTOR
permission: READ

[Phase - Ch4]
x_name: Frequency
x_unit: Hz
unit: deg
datatype: VECTOR
permission: READ