# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Moku Pro LockInAmp

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Moku_Pro_LockInAmp


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
[IP]
datatype: STRING
def_value: [fe80:0000:0000:0000:7269:79ff:feb0:0470%3]
section: Moku Settings


[Input Ch1 - Coupling]
datatype: COMBO
combo_def_1: DC
combo_def_2: AC
group: Inputs
[Input Ch1 - Impedance]
datatype: COMBO
combo_def_1: 50Ohm
combo_def_2: 1MOhm
group: Inputs

[Input Ch1 - Attenuation]
datatype: COMBO
combo_def_1: 0dB
combo_def_2: -20dB
combo_def_3: -40dB
group: Inputs

[Input Ch2 - Coupling]
datatype: COMBO
combo_def_1: DC
combo_def_2: AC
group: Inputs

[Input Ch2 - Impedance]
datatype: COMBO
combo_def_1: 50Ohm
combo_def_2: 1MOhm
group: Inputs

[Input Ch2 - Attenuation]
datatype: COMBO
combo_def_1: 0dB
combo_def_2: -20dB
combo_def_3: -40dB
group: Inputs

[Output - Main]
datatype: COMBO
combo_def_1: X
combo_def_2: Y
combo_def_3: R
combo_def_4: Theta
combo_def_5: Offset
combo_def_6: None
group: Output

[Output - Aux]
datatype: COMBO
combo_def_1: Y or Theta
combo_def_2: Demod
combo_def_3: Aux
combo_def_4: Offset
combo_def_5: None
group: Output

[Output - Main Offset]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: 4E-3
high_lim: 10
group: Output


[Output - Aux Offset]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: 4E-3
high_lim: 10
group: Output

[Output - Gain]
datatype: DOUBLE
unit: dB
def_value: 1.0
low_lim: 0
high_lim: 160
group: Output


[Demodulation]
datatype: COMBO
combo_def_1: Internal
combo_def_2: External
combo_def_3: ExternalPLL
combo_def_4: None
group: Demodulation


[Demod Frequency]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 600E6
group: Demodulation
state_quant: Demodulation
state_value: Internal

[Demod Amplitude]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: 4E-3
high_lim: 10
group: Demodulation
state_quant: Demodulation
state_value: Internal

[LPF Cutoff Freq]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
group: Low Pass Filter

[LPF Slope]
datatype: COMBO
combo_def_1: Slope6dB
combo_def_2: Slope12dB 
combo_def_3: Slope18dB
combo_def_4: Slope24dB
def_value: Slope6dB
group: Low Pass Filter

[Data - Ch1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Oscilloscope

[Data - Ch2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Oscilloscope


[Time Span]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9
group: Oscilloscope




[Acquisition Mode]
datatype: COMBO
combo_def_1: Normal
combo_def_2: Precision
combo_def_3: PeakDetect

group: Trigger

[Trigger Source]
datatype: COMBO
tooltip: Probe A is the 'Main' and Probe B is the 'Aux'
combo_def_1: ProbeA
combo_def_2: ProbeB

group: Trigger

[Trigger Level]
datatype: DOUBLE
low_lim: -20
high_lim: 20

group: Trigger



[Trigger Mode]
datatype: COMBO
combo_def_1: Auto
combo_def_2: Normal

group: Trigger


[Trigger Edge Type]
datatype: COMBO
combo_def_1: Rising
combo_def_2: Falling
combo_def_3: Both

group: Trigger

[Trigger Nth Event]
datatype: DOUBLE
unit: s
def_value: 1
low_lim: 1
high_lim: 65535

group: Trigger

[Trigger Holdoff Time]
datatype: DOUBLE
unit: s
def_value: 0
low_lim: 0
high_lim: 10

group: Trigger

[Trigger Noise Reject]
datatype: BOOLEAN
def_value: 0

group: Trigger

[Trigger HF Reject]
datatype: BOOLEAN
def_value: 0

group: Trigger
