# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Moku Pro Multi-Instrument

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Moku_Pro_Multi
# Define that the driver is a Signal Generator
signal_generator: True
signal_analyzer: True
timeout: None
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
[IP]
datatype: STRING
def_value: [fe80:0000:0000:0000:7269:79ff:feb0:0470%3]
section: Moku Settings

[Connections File]
datatype: STRING
def_value: C:/Users/Triton/Documents/Labber_Scripts/Moku_Pro_Multi/connections.txt
section: Moku Settings

[Inputs File]
datatype: STRING
def_value: C:/Users/Triton/Documents/Labber_Scripts/Moku_Pro_Multi/frontend.txt
section: Moku Settings

[Outputs File]
datatype: STRING
def_value: C:/Users/Triton/Documents/Labber_Scripts/Moku_Pro_Multi/output.txt
section: Moku Settings

[Instrument - Slot1]
datatype: COMBO
combo_def_1: WaveformGenerator 
combo_def_2: ArbitraryWaveformGenerator
combo_def_3: Oscilloscope
combo_def_4: SpectrumAnalyzer
combo_def_5: LockInAmp
combo_def_6: FrequencyResponseAnalyzer
section: Slot 1

[LIA Ch1 Data - 1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1

[LIA Ch2 Data - 1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1

[LIA Timespan - 1]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1

[LIA Output - Main - 1]
datatype: COMBO
combo_def_1: X
combo_def_2: Y
combo_def_3: R
combo_def_4: Theta
combo_def_5: Offset
combo_def_6: None
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1

[LIA Output - Aux - 1]
datatype: COMBO
combo_def_1: Y or Theta
combo_def_2: Demod
combo_def_3: Aux
combo_def_4: Offset
combo_def_5: None

state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1

[LIA Output - Gain - 1]
datatype: DOUBLE
unit: dB
def_value: 1.0
low_lim: 0
high_lim: 160
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1

[LIA Output - Main Offset - 1]
datatype: DOUBLE
unit: V
def_value: 0
low_lim: 0
high_lim: 10

state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1

[LIA Output - Aux Offset - 1]
datatype: DOUBLE
unit: V
def_value: 0
low_lim: 0
high_lim: 10

state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1

[LIA Demodulation - 1]
datatype: COMBO
combo_def_1: Internal
combo_def_2: External
combo_def_3: ExternalPLL
combo_def_4: None
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1

[LIA Demodulation Frequency - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 600E6
state_quant: Instrument - Slot1
state_value_1: LockInAmp
second_state_quant: LIA Demodulation - 1
second_state_value_1: Internal
section: Slot 1

[LIA Demodulation Amplitude - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: 4E-3
high_lim: 10
state_quant: Instrument - Slot1
state_value_1: LockInAmp
second_state_quant: LIA Demodulation - 1
second_state_value_1: Internal
section: Slot 1

[LIA LPF Cutoff Freq - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6

state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1
[LIA LPF Slope - 1]
datatype: COMBO
combo_def_1: Slope6dB
combo_def_2: Slope12dB 
combo_def_3: Slope18dB
combo_def_4: Slope24dB
def_value: Slope6dB

state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1


[LIA Acquisition Mode - 1]
datatype: COMBO
combo_def_1: Normal
combo_def_2: Precision
combo_def_3: PeakDetect
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1
group: Trigger

[LIA Trigger Source - 1]
datatype: COMBO
tooltip: Probe A is the 'Main' and Probe B is the 'Aux'
combo_def_1: ProbeA
combo_def_2: ProbeB
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1
group: Trigger

[LIA Trigger Level - 1]
datatype: DOUBLE
low_lim: -20
high_lim: 20
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1
group: Trigger



[LIA Trigger Mode - 1]
datatype: COMBO
combo_def_1: Auto
combo_def_2: Normal
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1
group: Trigger


[LIA Trigger Edge Type - 1]
datatype: COMBO
combo_def_1: Rising
combo_def_2: Falling
combo_def_3: Both
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1
group: Trigger

[LIA Trigger Nth Event - 1]
datatype: DOUBLE
unit: s
def_value: 1
low_lim: 1
high_lim: 65535
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1
group: Trigger

[LIA Trigger Holdoff Time - 1]
datatype: DOUBLE
unit: s
def_value: 0
low_lim: 0
high_lim: 10
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1
group: Trigger

[LIA Trigger Noise Reject - 1]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1
group: Trigger

[LIA Trigger HF Reject - 1]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot1
state_value_1: LockInAmp
section: Slot 1
group: Trigger



[FRA Sweep Start Freq - 1]
datatype: DOUBLE
unit: Hz
def_value: 1E6
low_lim: 1E-3
high_lim: 300E6

state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Sweep End Freq - 1]
datatype: DOUBLE
unit: Hz
def_value: 100
low_lim: 0
high_lim: 300E6

state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Sweep Num-Points - 1]
datatype: DOUBLE
def_value: 512
low_lim: 0
high_lim: 1E6

state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Sweep Averaging-Time - 1]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 1E-6
high_lim: 10

state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Sweep Averaging-Cycles - 1]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 1048576

state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Sweep Settling-Time - 1]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 1E-6
high_lim: 10

state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Sweep Settling-Cycles - 1]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 1048576

state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Sweep Linear - 1]
datatype: BOOLEAN

state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Output Amplitude - 1]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 1

state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Output Offset - 1]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 0

state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Output Phase - 1]
datatype: DOUBLE
unit: deg
low_lim: 0
high_lim: 360
def_value: 0

state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Harmonic Multiplier - 1]
datatype: DOUBLE
low_lim: 1
high_lim: 15
def_value: 1
state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1
[FRA Measurement Mode - 1]
datatype: COMBO
combo_def_1: In
combo_def_2: InOut
combo_def_3: InIn1
state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Ch1 Magnitude - 1]
unit: dB
x_name: Frequency
x_unit: Hz
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Ch1 Phase - 1]
x_name: Frequency
x_unit: Hz
unit: deg
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1
[FRA Ch2 Magnitude - 1]
unit: dB
x_name: Frequency
x_unit: Hz
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[FRA Ch2 Phase - 1]
x_name: Frequency
x_unit: Hz
unit: deg
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot1
state_value_1: FrequencyResponseAnalyzer
section: Slot 1

[SPA Freq Lower Bound - 1]
datatype: DOUBLE
unit: Hz
def_value: 1
low_lim: 0
high_lim: 300E6

section: Slot 1
state_quant: Instrument - Slot1
state_value_1: SpectrumAnalyzer

[SPA Freq Upper Bound - 1]
datatype: DOUBLE
unit: Hz
def_value: 1E6
low_lim: 0
high_lim: 300E6
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: SpectrumAnalyzer


[SPA Resolution Mode - 1]
datatype: COMBO
def_value: Auto
combo_def_1: Auto
combo_def_2: Manual
combo_def_3: Minimum
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: SpectrumAnalyzer


[SPA Resolution Bandwidth - 1]
datatype: DOUBLE
unit: Hz
def_value: 5000
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: SpectrumAnalyzer
second_state_quant: SPA Resolution Mode - 1
second_state_value_1: Manual


[SPA Window Function - 1]
datatype: COMBO
combo_def_1: BlackmanHarris
combo_def_2: FlatTop
combo_def_3: Rectangular
combo_def_4: Bartlett
combo_def_5: Hamming
combo_def_6: Hann
combo_def_7: Nuttall
combo_def_8: Gaussian
combo_def_9: Kaiser
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: SpectrumAnalyzer


[SPA Ch1 Data - 1]
unit: V
x_name: Frequency
x_unit: Hz
datatype: VECTOR
permission: READ
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: SpectrumAnalyzer


[SPA Ch2 Data - 1]
unit: V
x_name: Frequency
x_unit: Hz
datatype: VECTOR
permission: READ
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: SpectrumAnalyzer





[OSC Timespan - 1]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: Oscilloscope


[OSC Acquisition Mode - 1]
datatype: COMBO
combo_def_1: Normal
combo_def_2: Precision
combo_def_3: PeakDetect
state_quant: Instrument - Slot1
state_value_1: Oscilloscope
section: Slot 1
group: Trigger

[OSC Trigger Source - 1]
datatype: COMBO
combo_def_1: ChannelA
combo_def_2: ChannelB
combo_def_3: External
state_quant: Instrument - Slot1
state_value_1: Oscilloscope
section: Slot 1
group: Trigger

[OSC Trigger Level - 1]
datatype: DOUBLE
low_lim: -20
high_lim: 20
state_quant: Instrument - Slot1
state_value_1: Oscilloscope
section: Slot 1
group: Trigger



[OSC Trigger Mode - 1]
datatype: COMBO
combo_def_1: Auto
combo_def_2: Normal
state_quant: Instrument - Slot1
state_value_1: Oscilloscope
section: Slot 1
group: Trigger


[OSC Trigger Edge Type - 1]
datatype: COMBO
combo_def_1: Rising
combo_def_2: Falling
combo_def_3: Both
state_quant: Instrument - Slot1
state_value_1: Oscilloscope
section: Slot 1
group: Trigger

[OSC Trigger Nth Event - 1]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 65535
state_quant: Instrument - Slot1
state_value_1: Oscilloscope
section: Slot 1
group: Trigger

[OSC Trigger Holdoff Time - 1]
datatype: DOUBLE
unit: s
def_value: 0
low_lim: 0
high_lim: 10
state_quant: Instrument - Slot1
state_value_1: Oscilloscope
section: Slot 1
group: Trigger

[OSC Trigger Noise Reject - 1]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot1
state_value_1: Oscilloscope
section: Slot 1
group: Trigger

[OSC Trigger HF Reject - 1]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot1
state_value_1: Oscilloscope
section: Slot 1
group: Trigger


[OSC Ch1 Data - 1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot1
state_value_1: Oscilloscope
section: Slot 1



[OSC Ch2 Data - 1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot1
state_value_1: Oscilloscope
section: Slot 1

[WVG Ch1 Function - 1]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: Sine
combo_def_3: Square
combo_def_4: Ramp
combo_def_5: Pulse
combo_def_6: DC
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 Frequency - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
state_quant: WVG Ch1 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 Amplitude - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: WVG Ch1 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 4E-3
high_lim: 10
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 DC Offset - 1]
datatype: DOUBLE
def_value: 0.0
unit: V
low_lim: -5
high_lim: 5
state_quant: WVG Ch1 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 DC Level - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -5
high_lim: 5
state_quant: WVG Ch1 Function - 1
state_value_1: DC
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 Phase - 1]
datatype: DOUBLE
unit: deg
def_value: 0.0
state_quant: WVG Ch1 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 0
high_lim: 360
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1




[WVG Ch1 Ramp Symmetry - 1]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch1 Function - 1
state_value_1: Ramp
low_lim: 0
high_lim: 100
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 Duty Cycle - 1]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch1 Function - 1
state_value_1: Square
low_lim: 0
high_lim: 100
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 Pulse Width - 1]
datatype: DOUBLE
def_value: 100E-9
unit: s
state_quant: WVG Ch1 Function - 1
state_value_1: Pulse
low_lim: 4E-9
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 Edge Time - 1]
datatype: DOUBLE
def_value: 10E-9
unit: s
state_quant: WVG Ch1 Function - 1
state_value_1: Pulse
low_lim: 4E-9
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 Modulation - 1]
datatype: BOOLEAN
def_value: 0
state_quant: WVG Ch1 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse

section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 Trigger Source - 1]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: Input1
combo_def_3: Input2
combo_def_4: Input3
combo_def_5: Input4
combo_def_6: Output1
combo_def_7: Output2
combo_def_8: Output3
combo_def_9: Output4
state_quant: WVG Ch1 Modulation - 1
state_value_1: 1

section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 Mod Type - 1]
datatype: COMBO
def_value: Amplitude
combo_def_1: Amplitude
combo_def_2: Frequency
combo_def_3: Phase
combo_def_4: Burst
combo_def_5: Sweep

state_quant:WVG Ch1 Modulation - 1
state_value_1: 1
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 Mod Freq - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 125E6
state_quant: WVG Ch1 Mod Type - 1
state_value_1: Amplitude
state_value_2: Frequency
state_value_3: Phase


section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1


[WVG Ch1 AM Depth - 1]
datatype: DOUBLE
unit: %
def_value: 50
low_lim: 0
high_lim: 100
state_quant: WVG Ch1 Mod Type - 1
state_value_1: Amplitude
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 FM Depth - 1]
datatype: DOUBLE
unit: Hz
def_value: 50
low_lim: 0
state_quant: WVG Ch1 Mod Type - 1
state_value_1: Frequency
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch1 PM Depth - 1]
datatype: DOUBLE
unit: deg
def_value: 90
low_lim: 0
high_lim:360
state_quant: WVG Ch1 Mod Type - 1
state_value_1: Phase
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1



[WVG Ch2 Function - 1]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: Sine
combo_def_3: Square
combo_def_4: Ramp
combo_def_5: Pulse
combo_def_6: DC
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: WaveformGenerator
group: Channel 2



[WVG Ch2 Frequency - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
state_quant: WVG Ch2 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2



[WVG Ch2 Amplitude - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: WVG Ch2 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 4E-3
high_lim: 10
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2



[WVG Ch2 DC Offset - 1]
datatype: DOUBLE
def_value: 0.0
unit: V
low_lim: -5
high_lim: 5
state_quant: WVG Ch2 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2



[WVG Ch2 DC Level - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -5
high_lim: 5
state_quant: WVG Ch2 Function - 1
state_value_1: DC
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2



[WVG Ch2 Phase - 1]
datatype: DOUBLE
unit: deg
def_value: 0.0
state_quant: WVG Ch2 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 0
high_lim: 360
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2




[WVG Ch2 Ramp Symmetry - 1]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch2 Function - 1
state_value_1: Ramp
low_lim: 0
high_lim: 100
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2



[WVG Ch2 Duty Cycle - 1]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch2 Function - 1
state_value_1: Square
low_lim: 0
high_lim: 100
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2



[WVG Ch2 Pulse Width - 1]
datatype: DOUBLE
def_value: 100E-9
unit: s
state_quant: WVG Ch2 Function - 1
state_value_1: Pulse
low_lim: 4E-9
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2



[WVG Ch2 Edge Time - 1]
datatype: DOUBLE
def_value: 10E-9
unit: s
state_quant: WVG Ch2 Function - 1
state_value_1: Pulse
low_lim: 4E-9
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2



[WVG Ch2 Modulation - 1]
datatype: BOOLEAN
def_value: 0
state_quant: WVG Ch2 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse


section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2
[WVG Ch2 Trigger Source - 1]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: Input1
combo_def_3: Input2
combo_def_4: Input3
combo_def_5: Input4
combo_def_6: Output1
combo_def_7: Output2
combo_def_8: Output3
combo_def_9: Output4
state_quant: WVG Ch2 Modulation - 1
state_value_1: 1


section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2
[WVG Ch2 Mod Type - 1]
datatype: COMBO
def_value: Amplitude
combo_def_1: Amplitude
combo_def_2: Frequency
combo_def_3: Phase
combo_def_4: Burst
combo_def_5: Sweep


state_quant:WVG Ch2 Modulation - 1
state_value_1: 1
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2
[WVG Ch2 Mod Freq - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 125E6
state_quant: WVG Ch2 Mod Type - 1
state_value_1: Amplitude
state_value_2: Frequency
state_value_3: Phase


section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2
[WVG Ch2 AM Depth - 1]
datatype: DOUBLE
unit: %
def_value: 50
low_lim: 0
high_lim: 100
state_quant: WVG Ch2 Mod Type - 1
state_value_1: Amplitude


section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2
[WVG Ch2 FM Depth - 1]
datatype: DOUBLE
unit: Hz
def_value: 50
low_lim: 0
state_quant: WVG Ch2 Mod Type - 1
state_value_1: Frequency


section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 PM Depth - 1]
datatype: DOUBLE
unit: deg
def_value: 90
low_lim: 0
high_lim:360
state_quant: WVG Ch2 Mod Type - 1
state_value_1: Phase


section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2

[AWG Ch1 Enable Output - 1]
datatype: BOOLEAN
def_value: 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
section: Slot 1
group: Channel 1
[AWG Ch1 Premade File? - 1]
datatype:BOOLEAN
def_value: 0
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
section: Slot 1
group: Channel 1


[AWG Ch1 Range of x - 1]
datatype: STRING
def_value: np.linspace(0,1,100)
state_quant: AWG Ch1 Premade File? - 1
state_value_1: 0
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 f(x) in Python - 1]
datatype: STRING
def_value: 0.1*x
state_quant: AWG Ch1 Premade File? - 1
state_value_1: 0
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 File Location - 1]
datatype: STRING
def_value: C:/Users/Triton/Documents/Labber_Scripts/Moku_Pro_AWG/wave_
tooltip: The File should be of the form 'filename' and then the 'file number' so 'wave_' and the number '1' will be 'wave_1.txt'
state_quant: AWG Ch1 Premade File? - 1
state_value_1: 1
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1

[AWG Ch1 File Number - 1]
datatype: DOUBLE
def_value: 0
state_quant: AWG Ch1 Premade File? - 1
state_value_1: 1
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 Frequency - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 Amplitude - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 Sample Rate - 1]
datatype:COMBO
combo_def_1: Auto
combo_def_2: 1.25Gs
combo_def_3: 625Ms
combo_def_4: 312.5Ms
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 Output Load - 1]
datatype:COMBO
combo_def_1: 50Ohm
combo_def_2: 1MOhm
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 Modulate - 1]
datatype:COMBO
combo_def_1: Off
combo_def_2: Burst
combo_def_3: Pulse
def_value: Off
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 Trigger Source - 1]
datatype: COMBO
def_value: Input1
combo_def_1: Input1
combo_def_2: Input2
combo_def_3: Input3
combo_def_4: Input4
combo_def_5: External
state_quant: AWG Ch1 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 Trigger Mode - 1]
datatype: COMBO
def_value: NCycle
combo_def_1: Start
combo_def_2: NCycle
state_quant: AWG Ch1 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 Trigger Level - 1]
datatype: DOUBLE
unit: V
def_value: 0
state_quant: AWG Ch1 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 Input Range - 1]
datatype: COMBO
def_value: 400mVpp
combo_def_1: 400mVpp
combo_def_2: 4Vpp
combo_def_3: 40Vpp
state_quant: AWG Ch1 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 Burst Cycles - 1]
datatype: DOUBLE
def_value: 1
state_quant: AWG Ch1 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1

[AWG Ch1 Dead Cycles - 1]
datatype: DOUBLE
low_lim: 1
high_lim: 262144
def_value: 1
state_quant: AWG Ch1 Modulate - 1
state_value_1: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 Dead Voltage - 1]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 0
state_quant: AWG Ch1 Modulate - 1
state_value_1: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1

[AWG Ch2 Enable Output - 1]
datatype: BOOLEAN
def_value: 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
section: Slot 1
group: Channel 2
[AWG Ch2 Premade File? - 1]
datatype:BOOLEAN
def_value: 0
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
section: Slot 1
group: Channel 2



[AWG Ch2 Range of x - 1]
datatype: STRING
def_value: np.linspace(0,1,100)
state_quant: AWG Ch2 Premade File? - 1
state_value_1: 0
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 2



[AWG Ch2 f(x) in Python - 1]
datatype: STRING
def_value: 0.1*x
state_quant: AWG Ch2 Premade File? - 1
state_value_1: 0
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 2



[AWG Ch2 File Location - 1]
datatype: STRING
def_value: C:/Users/Triton/Documents/Labber_Scripts/Moku_Pro_AWG/wave_
tooltip: The File should be of the form 'filename' and then the 'file number' so 'wave_' and the number '1' will be 'wave_1.txt'
state_quant: AWG Ch2 Premade File? - 1
state_value_1: 1
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 2


[AWG Ch2 File Number - 1]
datatype: DOUBLE
def_value: 0
state_quant: AWG Ch2 Premade File? - 1
state_value_1: 1
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 2


[AWG Ch2 Frequency - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
group: Channel 2



[AWG Ch2 Amplitude - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
group: Channel 2



[AWG Ch2 Sample Rate - 1]
datatype:COMBO
combo_def_1: Auto
combo_def_2: 1.25Gs
combo_def_3: 625Ms
combo_def_4: 312.5Ms
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
group: Channel 2



[AWG Ch2 Output Load - 1]
datatype:COMBO
combo_def_1: 50Ohm
combo_def_2: 1MOhm
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
group: Channel 2



[AWG Ch2 Modulate - 1]
datatype:COMBO
combo_def_1: Off
combo_def_2: Burst
combo_def_3: Pulse
def_value: Off
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
group: Channel 2




[AWG Ch2 Trigger Source - 1]
datatype: COMBO
def_value: Input1
combo_def_1: Input1
combo_def_2: Input2
combo_def_3: Input3
combo_def_4: Input4
combo_def_5: External
state_quant: AWG Ch2 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 2



[AWG Ch2 Trigger Mode - 1]
datatype: COMBO
def_value: NCycle
combo_def_1: Start
combo_def_2: NCycle
state_quant: AWG Ch2 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 2




[AWG Ch2 Trigger Level - 1]
datatype: DOUBLE
unit: V
def_value: 0
state_quant: AWG Ch2 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 2



[AWG Ch2 Input Range - 1]
datatype: COMBO
def_value: 400mVpp
combo_def_1: 400mVpp
combo_def_2: 4Vpp
combo_def_3: 40Vpp
state_quant: AWG Ch2 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 2



[AWG Ch2 Burst Cycles - 1]
datatype: DOUBLE
def_value: 1
state_quant: AWG Ch2 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 2



[AWG Ch2 Dead Cycles - 1]
datatype: DOUBLE
low_lim: 1
high_lim: 262144
def_value: 1
state_quant: AWG Ch2 Modulate - 1
state_value_1: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 2



[AWG Ch2 Dead Voltage - 1]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 0
state_quant: AWG Ch2 Modulate - 1
state_value_1: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 2


[Instrument - Slot2]
datatype: COMBO
combo_def_1: WaveformGenerator 
combo_def_2: ArbitraryWaveformGenerator
combo_def_3: Oscilloscope
combo_def_4: SpectrumAnalyzer
combo_def_5: LockInAmp
combo_def_6: FrequencyResponseAnalyzer
section: Slot 2

[LIA Ch1 Data - 2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2

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

[LIA Timespan - 2]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2


[LIA Output - Main - 2]
datatype: COMBO
combo_def_1: X
combo_def_2: Y
combo_def_3: R
combo_def_4: Theta
combo_def_5: Offset
combo_def_6: None

state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
[LIA Output - Aux - 2]
datatype: COMBO
combo_def_1: Y or Theta
combo_def_2: Demod
combo_def_3: Aux
combo_def_4: Offset
combo_def_5: None

state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2

[LIA Output - Gain - 2]
datatype: DOUBLE
unit: dB
def_value: 1.0
low_lim: 0
high_lim: 160
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2

[LIA Output - Main Offset - 2]
datatype: DOUBLE
unit: V
def_value: 0
low_lim: 0
high_lim: 10

state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
[LIA Output - Aux Offset - 2]
datatype: DOUBLE
unit: V
def_value: 0
low_lim: 0
high_lim: 10

state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2

[LIA Demodulation - 2]
datatype: COMBO
combo_def_1: Internal
combo_def_2: External
combo_def_3: ExternalPLL
combo_def_4: None
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2


[LIA Demodulation Frequency - 2]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 600E6
state_quant: Instrument - Slot2
state_value_1: LockInAmp
second_state_quant: LIA Demodulation - 2
second_state_value_1: Internal
section: Slot 2

[LIA Demodulation Amplitude - 2]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: 4E-3
high_lim: 10
state_quant: Instrument - Slot2
state_value_1: LockInAmp
second_state_quant: LIA Demodulation - 2
second_state_value_1: Internal
section: Slot 2

[LIA LPF Cutoff Freq - 2]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6

state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
[LIA LPF Slope - 2]
datatype: COMBO
combo_def_1: Slope6dB
combo_def_2: Slope12dB 
combo_def_3: Slope18dB
combo_def_4: Slope24dB
def_value: Slope6dB

state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2

[LIA Acquisition Mode - 2]
datatype: COMBO
combo_def_1: Normal
combo_def_2: Precision
combo_def_3: PeakDetect
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
group: Trigger

[LIA Trigger Source - 2]
datatype: COMBO
tooltip: Probe A is the 'Main' and Probe B is the 'Aux'
combo_def_1: ProbeA
combo_def_2: ProbeB
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
group: Trigger

[LIA Trigger Level - 2]
datatype: DOUBLE
low_lim: -20
high_lim: 20
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
group: Trigger



[LIA Trigger Mode - 2]
datatype: COMBO
combo_def_1: Auto
combo_def_2: Normal
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
group: Trigger


[LIA Trigger Edge Type - 2]
datatype: COMBO
combo_def_1: Rising
combo_def_2: Falling
combo_def_3: Both
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
group: Trigger

[LIA Trigger Nth Event - 2]
datatype: DOUBLE
unit: s
def_value: 1
low_lim: 1
high_lim: 65535
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
group: Trigger

[LIA Trigger Holdoff Time - 2]
datatype: DOUBLE
unit: s
def_value: 0
low_lim: 0
high_lim: 10
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
group: Trigger

[LIA Trigger Noise Reject - 2]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
group: Trigger

[LIA Trigger HF Reject - 2]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot2
state_value_1: LockInAmp
section: Slot 2
group: Trigger



[FRA Sweep Start Freq - 2]
datatype: DOUBLE
unit: Hz
def_value: 1E6
low_lim: 1E-3
high_lim: 300E6

state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Sweep End Freq - 2]
datatype: DOUBLE
unit: Hz
def_value: 100
low_lim: 0
high_lim: 300E6

state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Sweep Num-Points - 2]
datatype: DOUBLE
def_value: 512
low_lim: 0
high_lim: 1E6

state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Sweep Averaging-Time - 2]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 1E-6
high_lim: 10

state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Sweep Averaging-Cycles - 2]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 1048576

state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Sweep Settling-Time - 2]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 1E-6
high_lim: 10

state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Sweep Settling-Cycles - 2]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 1048576

state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Sweep Linear - 2]
datatype: BOOLEAN

state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Output Amplitude - 2]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 1

state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Output Offset - 2]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 0

state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Output Phase - 2]
datatype: DOUBLE
unit: deg
low_lim: 0
high_lim: 360
def_value: 0

state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Harmonic Multiplier - 2]
datatype: DOUBLE
low_lim: 1
high_lim: 15
def_value: 1
state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2
[FRA Measurement Mode - 2]
datatype: COMBO
combo_def_1: In
combo_def_2: InOut
combo_def_3: InIn1
state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Ch1 Magnitude - 2]
unit: dB
x_name: Frequency
x_unit: Hz
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2

[FRA Ch1 Phase - 2]
x_name: Frequency
x_unit: Hz
unit: deg
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot2
state_value_1: FrequencyResponseAnalyzer
section: Slot 2
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

[SPA Freq Lower Bound - 2]
datatype: DOUBLE
unit: Hz
def_value: 1
low_lim: 0
high_lim: 300E6

section: Slot 2
state_quant: Instrument - Slot2
state_value_1: SpectrumAnalyzer

[SPA Freq Upper Bound - 2]
datatype: DOUBLE
unit: Hz
def_value: 1E6
low_lim: 0
high_lim: 300E6
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: SpectrumAnalyzer


[SPA Resolution Mode - 2]
datatype: COMBO
def_value: Auto
combo_def_1: Auto
combo_def_2: Manual
combo_def_3: Minimum
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: SpectrumAnalyzer


[SPA Resolution Bandwidth - 2]
datatype: DOUBLE
unit: Hz
def_value: 5000
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: SpectrumAnalyzer
second_state_quant: SPA Resolution Mode - 2
second_state_value_1: Manual


[SPA Window Function - 2]
datatype: COMBO
combo_def_1: BlackmanHarris
combo_def_2: FlatTop
combo_def_3: Rectangular
combo_def_4: Bartlett
combo_def_5: Hamming
combo_def_6: Hann
combo_def_7: Nuttall
combo_def_8: Gaussian
combo_def_9: Kaiser
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: SpectrumAnalyzer


[SPA Ch1 Data - 2]
unit: V
x_name: Frequency
x_unit: Hz
datatype: VECTOR
permission: READ
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: SpectrumAnalyzer


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

[OSC Timespan - 2]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: Oscilloscope


[OSC Acquisition Mode - 2]
datatype: COMBO
combo_def_1: Normal
combo_def_2: Precision
combo_def_3: PeakDetect
state_quant: Instrument - Slot2
state_value_1: Oscilloscope
section: Slot 2
group: Trigger

[OSC Trigger Source - 2]
datatype: COMBO
combo_def_1: ChannelA
combo_def_2: ChannelB
combo_def_3: External
state_quant: Instrument - Slot2
state_value_1: Oscilloscope
section: Slot 2
group: Trigger

[OSC Trigger Level - 2]
datatype: DOUBLE
low_lim: -20
high_lim: 20
state_quant: Instrument - Slot2
state_value_1: Oscilloscope
section: Slot 2
group: Trigger



[OSC Trigger Mode - 2]
datatype: COMBO
combo_def_1: Auto
combo_def_2: Normal
state_quant: Instrument - Slot2
state_value_1: Oscilloscope
section: Slot 2
group: Trigger


[OSC Trigger Edge Type - 2]
datatype: COMBO
combo_def_1: Rising
combo_def_2: Falling
combo_def_3: Both
state_quant: Instrument - Slot2
state_value_1: Oscilloscope
section: Slot 2
group: Trigger

[OSC Trigger Nth Event - 2]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 65535
state_quant: Instrument - Slot2
state_value_1: Oscilloscope
section: Slot 2
group: Trigger

[OSC Trigger Holdoff Time - 2]
datatype: DOUBLE
unit: s
def_value: 0
low_lim: 0
high_lim: 10
state_quant: Instrument - Slot2
state_value_1: Oscilloscope
section: Slot 2
group: Trigger

[OSC Trigger Noise Reject - 2]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot2
state_value_1: Oscilloscope
section: Slot 2
group: Trigger

[OSC Trigger HF Reject - 2]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot2
state_value_1: Oscilloscope
section: Slot 2
group: Trigger



[OSC Ch1 Data - 2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot2
state_value_1: Oscilloscope
section: Slot 2



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

[WVG Ch1 Function - 2]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: Sine
combo_def_3: Square
combo_def_4: Ramp
combo_def_5: Pulse
combo_def_6: DC
section: Slot 2
state_quant: Instrument - Slot2
state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Frequency - 2]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
state_quant: WVG Ch1 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Amplitude - 2]
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: WVG Ch1 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 4E-3
high_lim: 10
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 DC Offset - 2]
datatype: DOUBLE
def_value: 0.0
unit: V
low_lim: -5
high_lim: 5
state_quant: WVG Ch1 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 DC Level - 2]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -5
high_lim: 5
state_quant: WVG Ch1 Function - 2
state_value_1: DC
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Phase - 2]
datatype: DOUBLE
unit: deg
def_value: 0.0
state_quant: WVG Ch1 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 0
high_lim: 360
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1




[WVG Ch1 Ramp Symmetry - 2]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch1 Function - 2
state_value_1: Ramp
low_lim: 0
high_lim: 100
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Duty Cycle - 2]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch1 Function - 2
state_value_1: Square
low_lim: 0
high_lim: 100
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Pulse Width - 2]
datatype: DOUBLE
def_value: 100E-9
unit: s
state_quant: WVG Ch1 Function - 2
state_value_1: Pulse
low_lim: 4E-9
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Edge Time - 2]
datatype: DOUBLE
def_value: 10E-9
unit: s
state_quant: WVG Ch1 Function - 2
state_value_1: Pulse
low_lim: 4E-9
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Modulation - 2]
datatype: BOOLEAN
def_value: 0
state_quant: WVG Ch1 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse

section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Trigger Source - 2]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: Input1
combo_def_3: Input2
combo_def_4: Input3
combo_def_5: Input4
combo_def_6: Output1
combo_def_7: Output2
combo_def_8: Output3
combo_def_9: Output4
state_quant: WVG Ch1 Modulation - 2
state_value_1: 1

section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Mod Type - 2]
datatype: COMBO
def_value: Amplitude
combo_def_1: Amplitude
combo_def_2: Frequency
combo_def_3: Phase
combo_def_4: Burst
combo_def_5: Sweep

state_quant:WVG Ch1 Modulation - 2
state_value_1: 1
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Mod Freq - 2]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 125E6
state_quant: WVG Ch1 Mod Type - 2
state_value_1: Amplitude
state_value_2: Frequency
state_value_3: Phase


section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1


[WVG Ch1 AM Depth - 2]
datatype: DOUBLE
unit: %
def_value: 50
low_lim: 0
high_lim: 100
state_quant: WVG Ch1 Mod Type - 2
state_value_1: Amplitude
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 FM Depth - 2]
datatype: DOUBLE
unit: Hz
def_value: 50
low_lim: 0
state_quant: WVG Ch1 Mod Type - 2
state_value_1: Frequency
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 PM Depth - 2]
datatype: DOUBLE
unit: deg
def_value: 90
low_lim: 0
high_lim:360
state_quant: WVG Ch1 Mod Type - 2
state_value_1: Phase
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 1



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

[WVG Ch2 Frequency - 2]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
state_quant: WVG Ch2 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2



[WVG Ch2 Amplitude - 2]
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: WVG Ch2 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 4E-3
high_lim: 10
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2



[WVG Ch2 DC Offset - 2]
datatype: DOUBLE
def_value: 0.0
unit: V
low_lim: -5
high_lim: 5
state_quant: WVG Ch2 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2



[WVG Ch2 DC Level - 2]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -5
high_lim: 5
state_quant: WVG Ch2 Function - 2
state_value_1: DC
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2



[WVG Ch2 Phase - 2]
datatype: DOUBLE
unit: deg
def_value: 0.0
state_quant: WVG Ch2 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 0
high_lim: 360
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2




[WVG Ch2 Ramp Symmetry - 2]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch2 Function - 2
state_value_1: Ramp
low_lim: 0
high_lim: 100
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2



[WVG Ch2 Duty Cycle - 2]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch2 Function - 2
state_value_1: Square
low_lim: 0
high_lim: 100
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2



[WVG Ch2 Pulse Width - 2]
datatype: DOUBLE
def_value: 100E-9
unit: s
state_quant: WVG Ch2 Function - 2
state_value_1: Pulse
low_lim: 4E-9
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2



[WVG Ch2 Edge Time - 2]
datatype: DOUBLE
def_value: 10E-9
unit: s
state_quant: WVG Ch2 Function - 2
state_value_1: Pulse
low_lim: 4E-9
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2



[WVG Ch2 Modulation - 2]
datatype: BOOLEAN
def_value: 0
state_quant: WVG Ch2 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse


section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2
[WVG Ch2 Trigger Source - 2]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: Input1
combo_def_3: Input2
combo_def_4: Input3
combo_def_5: Input4
combo_def_6: Output1
combo_def_7: Output2
combo_def_8: Output3
combo_def_9: Output4
state_quant: WVG Ch2 Modulation - 2
state_value_1: 1


section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2
[WVG Ch2 Mod Type - 2]
datatype: COMBO
def_value: Amplitude
combo_def_1: Amplitude
combo_def_2: Frequency
combo_def_3: Phase
combo_def_4: Burst
combo_def_5: Sweep


state_quant:WVG Ch2 Modulation - 2
state_value_1: 1
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2
[WVG Ch2 Mod Freq - 2]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 125E6
state_quant: WVG Ch2 Mod Type - 2
state_value_1: Amplitude
state_value_2: Frequency
state_value_3: Phase


section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2
[WVG Ch2 AM Depth - 2]
datatype: DOUBLE
unit: %
def_value: 50
low_lim: 0
high_lim: 100
state_quant: WVG Ch2 Mod Type - 2
state_value_1: Amplitude


section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2
[WVG Ch2 FM Depth - 2]
datatype: DOUBLE
unit: Hz
def_value: 50
low_lim: 0
state_quant: WVG Ch2 Mod Type - 2
state_value_1: Frequency


section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2
[WVG Ch2 PM Depth - 2]
datatype: DOUBLE
unit: deg
def_value: 90
low_lim: 0
high_lim:360
state_quant: WVG Ch2 Mod Type - 2
state_value_1: Phase


section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1:WaveformGenerator
group: Channel 2

[AWG Ch1 Enable Output - 2]
datatype: BOOLEAN
def_value: 1
state_quant: Instrument - Slot2
state_value_1: ArbitraryWaveformGenerator
section: Slot 2


[AWG Ch1 Premade File? - 2]
datatype:BOOLEAN
def_value: 0
state_quant: Instrument - Slot2
state_value_1: ArbitraryWaveformGenerator
section: Slot 2
group: Channel 1



[AWG Ch1 Range of x - 2]
datatype: STRING
def_value: np.linspace(0,1,100)
state_quant: AWG Ch1 Premade File? - 2
state_value_1: 0
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 f(x) in Python - 2]
datatype: STRING
def_value: 0.1*x
state_quant: AWG Ch1 Premade File? - 2
state_value_1: 0
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 File Location - 2]
datatype: STRING
def_value: C:/Users/Triton/Documents/Labber_Scripts/Moku_Pro_AWG/wave_
tooltip: The File should be of the form 'filename' and then the 'file number' so 'wave_' and the number '1' will be 'wave_1.txt'
state_quant: AWG Ch1 Premade File? - 2
state_value_1: 1
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 File Number - 2]
datatype: DOUBLE
def_value: 0
state_quant: AWG Ch1 Premade File? - 2
state_value_1: 1
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 Frequency - 2]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 Amplitude - 2]
datatype: DOUBLE
unit: V
def_value: 1.0
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: ArbitraryWaveformGenerator
group: Channel 1


[AWG Ch1 Sample Rate - 2]
datatype:COMBO
combo_def_1: Auto
combo_def_2: 1.25Gs
combo_def_3: 625Ms
combo_def_4: 312.5Ms
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 Output Load - 2]
datatype:COMBO
combo_def_1: 50Ohm
combo_def_2: 1MOhm
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 Modulate - 2]
datatype:COMBO
combo_def_1: Off
combo_def_2: Burst
combo_def_3: Pulse
def_value: Off
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: ArbitraryWaveformGenerator
group: Channel 1




[AWG Ch1 Trigger Source - 2]
datatype: COMBO
def_value: Input1
combo_def_1: Input1
combo_def_2: Input2
combo_def_3: Input3
combo_def_4: Input4
combo_def_5: External
state_quant: AWG Ch1 Modulate - 2
state_value_1: Burst
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 Trigger Mode - 2]
datatype: COMBO
def_value: NCycle
combo_def_1: Start
combo_def_2: NCycle
state_quant: AWG Ch1 Modulate - 2
state_value_1: Burst
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1




[AWG Ch1 Trigger Level - 2]
datatype: DOUBLE
unit: V
def_value: 0
state_quant: AWG Ch1 Modulate - 2
state_value_1: Burst
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 Input Range - 2]
datatype: COMBO
def_value: 400mVpp
combo_def_1: 400mVpp
combo_def_2: 4Vpp
combo_def_3: 40Vpp
state_quant: AWG Ch1 Modulate - 2
state_value_1: Burst
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 Burst Cycles - 2]
datatype: DOUBLE
def_value: 1
state_quant: AWG Ch1 Modulate - 2
state_value_1: Burst
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 Dead Cycles - 2]
datatype: DOUBLE
low_lim: 1
high_lim: 262144
def_value: 1
state_quant: AWG Ch1 Modulate - 2
state_value_1: Pulse
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1



[AWG Ch1 Dead Voltage - 2]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 0
state_quant: AWG Ch1 Modulate - 2
state_value_1: Pulse
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1

[AWG Ch2 Enable Output - 2]
datatype: BOOLEAN
def_value: 1
state_quant: Instrument - Slot2
state_value_1: ArbitraryWaveformGenerator
section: Slot 2
group: Channel 2

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

[Instrument - Slot3]
datatype: COMBO
combo_def_1: WaveformGenerator 
combo_def_2: ArbitraryWaveformGenerator
combo_def_3: Oscilloscope
combo_def_4: SpectrumAnalyzer
combo_def_5: LockInAmp
combo_def_6: FrequencyResponseAnalyzer
section: Slot 3

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

[LIA Timespan - 3]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3


[LIA Output - Main - 3]
datatype: COMBO
combo_def_1: X
combo_def_2: Y
combo_def_3: R
combo_def_4: Theta
combo_def_5: Offset
combo_def_6: None

state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
[LIA Output - Aux - 3]
datatype: COMBO
combo_def_1: Y or Theta
combo_def_2: Demod
combo_def_3: Aux
combo_def_4: Offset
combo_def_5: None

state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3

[LIA Output - Gain - 3]
datatype: DOUBLE
unit: dB
def_value: 1.0
low_lim: 0
high_lim: 160
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3

[LIA Output - Main Offset - 3]
datatype: DOUBLE
unit: V
def_value: 0
low_lim: 0
high_lim: 10

state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
[LIA Output - Aux Offset - 3]
datatype: DOUBLE
unit: V
def_value: 0
low_lim: 0
high_lim: 10
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3

[LIA Demodulation - 3]
datatype: COMBO
combo_def_1: Internal
combo_def_2: External
combo_def_3: ExternalPLL
combo_def_4: None
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3


[LIA Demodulation Frequency - 3]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 600E6
state_quant: Instrument - Slot3
state_value_1: LockInAmp
second_state_quant: LIA Demodulation - 3
second_state_value_1: Internal
section: Slot 3

[LIA Demodulation Amplitude - 3]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: 4E-3
high_lim: 10
state_quant: Instrument - Slot3
state_value_1: LockInAmp
second_state_quant: LIA Demodulation - 3
second_state_value_1: Internal
section: Slot 3

[LIA LPF Cutoff Freq - 3]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6

state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
[LIA LPF Slope - 3]
datatype: COMBO
combo_def_1: Slope6dB
combo_def_2: Slope12dB 
combo_def_3: Slope18dB
combo_def_4: Slope24dB
def_value: Slope6dB

state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3


[LIA Acquisition Mode - 3]
datatype: COMBO
combo_def_1: Normal
combo_def_2: Precision
combo_def_3: PeakDetect
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
group: Trigger

[LIA Trigger Source - 3]
datatype: COMBO
tooltip: Probe A is the 'Main' and Probe B is the 'Aux'
combo_def_1: ProbeA
combo_def_2: ProbeB
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
group: Trigger

[LIA Trigger Level - 3]
datatype: DOUBLE
low_lim: -20
high_lim: 20
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
group: Trigger



[LIA Trigger Mode - 3]
datatype: COMBO
combo_def_1: Auto
combo_def_2: Normal
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
group: Trigger


[LIA Trigger Edge Type - 3]
datatype: COMBO
combo_def_1: Rising
combo_def_2: Falling
combo_def_3: Both
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
group: Trigger

[LIA Trigger Nth Event - 3]
datatype: DOUBLE
unit: s
def_value: 1
low_lim: 1
high_lim: 65535
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
group: Trigger

[LIA Trigger Holdoff Time - 3]
datatype: DOUBLE
unit: s
def_value: 0
low_lim: 0
high_lim: 10
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
group: Trigger

[LIA Trigger Noise Reject - 3]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
group: Trigger

[LIA Trigger HF Reject - 3]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot3
state_value_1: LockInAmp
section: Slot 3
group: Trigger



[FRA Sweep Start Freq - 3]
datatype: DOUBLE
unit: Hz
def_value: 1E6
low_lim: 1E-3
high_lim: 300E6

state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

[FRA Sweep End Freq - 3]
datatype: DOUBLE
unit: Hz
def_value: 100
low_lim: 0
high_lim: 300E6

state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

[FRA Sweep Num-Points - 3]
datatype: DOUBLE
def_value: 512
low_lim: 0
high_lim: 1E6

state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

[FRA Sweep Averaging-Time - 3]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 1E-6
high_lim: 10

state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

[FRA Sweep Averaging-Cycles - 3]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 1048576

state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

[FRA Sweep Settling-Time - 3]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 1E-6
high_lim: 10

state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

[FRA Sweep Settling-Cycles - 3]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 1048576

state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

[FRA Sweep Linear - 3]
datatype: BOOLEAN

state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

[FRA Output Amplitude - 3]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 1

state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

[FRA Output Offset - 3]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 0

state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

[FRA Output Phase - 3]
datatype: DOUBLE
unit: deg
low_lim: 0
high_lim: 360
def_value: 0

state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

[FRA Harmonic Multiplier - 3]
datatype: DOUBLE
low_lim: 1
high_lim: 15
def_value: 1
state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3
[FRA Measurement Mode - 3]
datatype: COMBO
combo_def_1: In
combo_def_2: InOut
combo_def_3: InIn1
state_quant: Instrument - Slot3
state_value_1: FrequencyResponseAnalyzer
section: Slot 3

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

[SPA Freq Lower Bound - 3]
datatype: DOUBLE
unit: Hz
def_value: 1
low_lim: 0
high_lim: 300E6

section: Slot 3
state_quant: Instrument - Slot3
state_value_1: SpectrumAnalyzer

[SPA Freq Upper Bound - 3]
datatype: DOUBLE
unit: Hz
def_value: 1E6
low_lim: 0
high_lim: 300E6
section: Slot 3
state_quant: Instrument - Slot3
state_value_1: SpectrumAnalyzer


[SPA Resolution Mode - 3]
datatype: COMBO
def_value: Auto
combo_def_1: Auto
combo_def_2: Manual
combo_def_3: Minimum
section: Slot 3
state_quant: Instrument - Slot3
state_value_1: SpectrumAnalyzer


[SPA Resolution Bandwidth - 3]
datatype: DOUBLE
unit: Hz
def_value: 5000
section: Slot 3
state_quant: Instrument - Slot3
state_value_1: SpectrumAnalyzer
second_state_quant: SPA Resolution Mode - 3
second_state_value_1: Manual


[SPA Window Function - 3]
datatype: COMBO
combo_def_1: BlackmanHarris
combo_def_2: FlatTop
combo_def_3: Rectangular
combo_def_4: Bartlett
combo_def_5: Hamming
combo_def_6: Hann
combo_def_7: Nuttall
combo_def_8: Gaussian
combo_def_9: Kaiser
section: Slot 3
state_quant: Instrument - Slot3
state_value_1: SpectrumAnalyzer


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

[OSC Timespan - 3]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9
section: Slot 3
state_quant: Instrument - Slot3
state_value_1: Oscilloscope


[OSC Acquisition Mode - 3]
datatype: COMBO
combo_def_1: Normal
combo_def_2: Precision
combo_def_3: PeakDetect
state_quant: Instrument - Slot3
state_value_1: Oscilloscope
section: Slot 3
group: Trigger

[OSC Trigger Source - 3]
datatype: COMBO
combo_def_1: ChannelA
combo_def_2: ChannelB
combo_def_3: External
state_quant: Instrument - Slot3
state_value_1: Oscilloscope
section: Slot 3
group: Trigger

[OSC Trigger Level - 3]
datatype: DOUBLE
low_lim: -20
high_lim: 20
state_quant: Instrument - Slot3
state_value_1: Oscilloscope
section: Slot 3
group: Trigger



[OSC Trigger Mode - 3]
datatype: COMBO
combo_def_1: Auto
combo_def_2: Normal
state_quant: Instrument - Slot3
state_value_1: Oscilloscope
section: Slot 3
group: Trigger


[OSC Trigger Edge Type - 3]
datatype: COMBO
combo_def_1: Rising
combo_def_2: Falling
combo_def_3: Both
state_quant: Instrument - Slot3
state_value_1: Oscilloscope
section: Slot 3
group: Trigger

[OSC Trigger Nth Event - 3]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 65535
state_quant: Instrument - Slot3
state_value_1: Oscilloscope
section: Slot 3
group: Trigger

[OSC Trigger Holdoff Time - 3]
datatype: DOUBLE
unit: s
def_value: 0
low_lim: 0
high_lim: 10
state_quant: Instrument - Slot3
state_value_1: Oscilloscope
section: Slot 3
group: Trigger

[OSC Trigger Noise Reject - 3]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot3
state_value_1: Oscilloscope
section: Slot 3
group: Trigger

[OSC Trigger HF Reject - 3]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot3
state_value_1: Oscilloscope
section: Slot 3
group: Trigger



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

[WVG Ch1 Frequency - 3]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
state_quant: WVG Ch1 Function - 3
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Amplitude - 3]
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: WVG Ch1 Function - 3
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 4E-3
high_lim: 10
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 DC Offset - 3]
datatype: DOUBLE
def_value: 0.0
unit: V
low_lim: -5
high_lim: 5
state_quant: WVG Ch1 Function - 3
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 DC Level - 3]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -5
high_lim: 5
state_quant: WVG Ch1 Function - 3
state_value_1: DC
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Phase - 3]
datatype: DOUBLE
unit: deg
def_value: 0.0
state_quant: WVG Ch1 Function - 3
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 0
high_lim: 360
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1




[WVG Ch1 Ramp Symmetry - 3]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch1 Function - 3
state_value_1: Ramp
low_lim: 0
high_lim: 100
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Duty Cycle - 3]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch1 Function - 3
state_value_1: Square
low_lim: 0
high_lim: 100
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Pulse Width - 3]
datatype: DOUBLE
def_value: 100E-9
unit: s
state_quant: WVG Ch1 Function - 3
state_value_1: Pulse
low_lim: 4E-9
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Edge Time - 3]
datatype: DOUBLE
def_value: 10E-9
unit: s
state_quant: WVG Ch1 Function - 3
state_value_1: Pulse
low_lim: 4E-9
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Modulation - 3]
datatype: BOOLEAN
def_value: 0
state_quant: WVG Ch1 Function - 3
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse

section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Trigger Source - 3]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: Input1
combo_def_3: Input2
combo_def_4: Input3
combo_def_5: Input4
combo_def_6: Output1
combo_def_7: Output2
combo_def_8: Output3
combo_def_9: Output4
state_quant: WVG Ch1 Modulation - 3
state_value_1: 1

section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Mod Type - 3]
datatype: COMBO
def_value: Amplitude
combo_def_1: Amplitude
combo_def_2: Frequency
combo_def_3: Phase
combo_def_4: Burst
combo_def_5: Sweep

state_quant:WVG Ch1 Modulation - 3
state_value_1: 1
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 Mod Freq - 3]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 125E6
state_quant: WVG Ch1 Mod Type - 3
state_value_1: Amplitude
state_value_2: Frequency
state_value_3: Phase


section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1


[WVG Ch1 AM Depth - 3]
datatype: DOUBLE
unit: %
def_value: 50
low_lim: 0
high_lim: 100
state_quant: WVG Ch1 Mod Type - 3
state_value_1: Amplitude
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 FM Depth - 3]
datatype: DOUBLE
unit: Hz
def_value: 50
low_lim: 0
state_quant: WVG Ch1 Mod Type - 3
state_value_1: Frequency
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



[WVG Ch1 PM Depth - 3]
datatype: DOUBLE
unit: deg
def_value: 90
low_lim: 0
high_lim:360
state_quant: WVG Ch1 Mod Type - 3
state_value_1: Phase
section: Slot 3
second_state_quant: Instrument - Slot3
second_state_value_1:WaveformGenerator
group: Channel 1



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

[AWG Ch1 Enable Output - 3]
datatype: BOOLEAN
def_value: 1
state_quant: Instrument - Slot3
state_value_1: ArbitraryWaveformGenerator
section: Slot 3



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

[AWG Ch2 Enable Output - 3]
datatype: BOOLEAN
def_value: 1
state_quant: Instrument - Slot3
state_value_1: ArbitraryWaveformGenerator
section: Slot 3
group: Channel 2

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

[Instrument - Slot4]
datatype: COMBO
combo_def_1: WaveformGenerator 
combo_def_2: ArbitraryWaveformGenerator
combo_def_3: Oscilloscope
combo_def_4: SpectrumAnalyzer
combo_def_5: LockInAmp
combo_def_6: FrequencyResponseAnalyzer
section: Slot 4

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

[LIA Timespan - 4]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4


[LIA Output - Main - 4]
datatype: COMBO
combo_def_1: X
combo_def_2: Y
combo_def_3: R
combo_def_4: Theta
combo_def_5: Offset
combo_def_6: None

state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
[LIA Output - Aux - 4]
datatype: COMBO
combo_def_1: Y or Theta
combo_def_2: Demod
combo_def_3: Aux
combo_def_4: Offset
combo_def_5: None

state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4

[LIA Output - Gain - 4]
datatype: DOUBLE
unit: dB
def_value: 1.0
low_lim: 0
high_lim: 160
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4


[LIA Output - Main Offset - 4]
datatype: DOUBLE
unit: V
def_value: 0
low_lim: 0
high_lim: 10

state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
[LIA Output - Aux Offset - 4]
datatype: DOUBLE
unit: V
def_value: 0
low_lim: 0
high_lim: 10

state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4

[LIA Demodulation - 4]
datatype: COMBO
combo_def_1: Internal
combo_def_2: External
combo_def_3: ExternalPLL
combo_def_4: None
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4


[LIA Demodulation Frequency - 4]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 600E6
state_quant: Instrument - Slot4
state_value_1: LockInAmp
second_state_quant: LIA Demodulation - 4
second_state_value_1: Internal
section: Slot 4

[LIA Demodulation Amplitude - 4]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: 4E-3
high_lim: 10
state_quant: Instrument - Slot4
state_value_1: LockInAmp
second_state_quant: LIA Demodulation - 4
second_state_value_1: Internal
section: Slot 4

[LIA LPF Cutoff Freq - 4]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6

state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
[LIA LPF Slope - 4]
datatype: COMBO
combo_def_1: Slope6dB
combo_def_2: Slope12dB 
combo_def_3: Slope18dB
combo_def_4: Slope24dB
def_value: Slope6dB

state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4



[LIA Acquisition Mode - 4]
datatype: COMBO
combo_def_1: Normal
combo_def_2: Precision
combo_def_3: PeakDetect
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
group: Trigger

[LIA Trigger Source - 4]
datatype: COMBO
tooltip: Probe A is the 'Main' and Probe B is the 'Aux'
combo_def_1: ProbeA
combo_def_2: ProbeB
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
group: Trigger

[LIA Trigger Level - 4]
datatype: DOUBLE
low_lim: -20
high_lim: 20
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
group: Trigger



[LIA Trigger Mode - 4]
datatype: COMBO
combo_def_1: Auto
combo_def_2: Normal
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
group: Trigger


[LIA Trigger Edge Type - 4]
datatype: COMBO
combo_def_1: Rising
combo_def_2: Falling
combo_def_3: Both
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
group: Trigger

[LIA Trigger Nth Event - 4]
datatype: DOUBLE
unit: s
def_value: 1
low_lim: 1
high_lim: 65535
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
group: Trigger

[LIA Trigger Holdoff Time - 4]
datatype: DOUBLE
unit: s
def_value: 0
low_lim: 0
high_lim: 10
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
group: Trigger

[LIA Trigger Noise Reject - 4]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
group: Trigger

[LIA Trigger HF Reject - 4]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot4
state_value_1: LockInAmp
section: Slot 4
group: Trigger


[FRA Sweep Start Freq - 4]
datatype: DOUBLE
unit: Hz
def_value: 1E6
low_lim: 1E-3
high_lim: 300E6

state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

[FRA Sweep End Freq - 4]
datatype: DOUBLE
unit: Hz
def_value: 100
low_lim: 0
high_lim: 300E6

state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

[FRA Sweep Num-Points - 4]
datatype: DOUBLE
def_value: 512
low_lim: 0
high_lim: 1E6

state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

[FRA Sweep Averaging-Time - 4]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 1E-6
high_lim: 10

state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

[FRA Sweep Averaging-Cycles - 4]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 1048576

state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

[FRA Sweep Settling-Time - 4]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 1E-6
high_lim: 10

state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

[FRA Sweep Settling-Cycles - 4]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 1048576

state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

[FRA Sweep Linear - 4]
datatype: BOOLEAN

state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

[FRA Output Amplitude - 4]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 1

state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

[FRA Output Offset - 4]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 0

state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

[FRA Output Phase - 4]
datatype: DOUBLE
unit: deg
low_lim: 0
high_lim: 360
def_value: 0

state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

[FRA Harmonic Multiplier - 4]
datatype: DOUBLE
low_lim: 1
high_lim: 15
def_value: 1
state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4
[FRA Measurement Mode - 4]
datatype: COMBO
combo_def_1: In
combo_def_2: InOut
combo_def_3: InIn1
state_quant: Instrument - Slot4
state_value_1: FrequencyResponseAnalyzer
section: Slot 4

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

[SPA Freq Lower Bound - 4]
datatype: DOUBLE
unit: Hz
def_value: 1
low_lim: 0
high_lim: 300E6

section: Slot 4
state_quant: Instrument - Slot4
state_value_1: SpectrumAnalyzer

[SPA Freq Upper Bound - 4]
datatype: DOUBLE
unit: Hz
def_value: 1E6
low_lim: 0
high_lim: 300E6
section: Slot 4
state_quant: Instrument - Slot4
state_value_1: SpectrumAnalyzer


[SPA Resolution Mode - 4]
datatype: COMBO
def_value: Auto
combo_def_1: Auto
combo_def_2: Manual
combo_def_3: Minimum
section: Slot 4
state_quant: Instrument - Slot4
state_value_1: SpectrumAnalyzer


[SPA Resolution Bandwidth - 4]
datatype: DOUBLE
unit: Hz
def_value: 5000
section: Slot 4
state_quant: Instrument - Slot4
state_value_1: SpectrumAnalyzer
second_state_quant: SPA Resolution Mode - 4
second_state_value_1: Manual


[SPA Window Function - 4]
datatype: COMBO
combo_def_1: BlackmanHarris
combo_def_2: FlatTop
combo_def_3: Rectangular
combo_def_4: Bartlett
combo_def_5: Hamming
combo_def_6: Hann
combo_def_7: Nuttall
combo_def_8: Gaussian
combo_def_9: Kaiser
section: Slot 4
state_quant: Instrument - Slot4
state_value_1: SpectrumAnalyzer


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

[OSC Timespan - 4]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9
section: Slot 4
state_quant: Instrument - Slot4
state_value_1: Oscilloscope


[OSC Acquisition Mode - 4]
datatype: COMBO
combo_def_1: Normal
combo_def_2: Precision
combo_def_3: PeakDetect
state_quant: Instrument - Slot4
state_value_1: Oscilloscope
section: Slot 4
group: Trigger

[OSC Trigger Source - 4]
datatype: COMBO
combo_def_1: ChannelA
combo_def_2: ChannelB
combo_def_3: External
state_quant: Instrument - Slot4
state_value_1: Oscilloscope
section: Slot 4
group: Trigger

[OSC Trigger Level - 4]
datatype: DOUBLE
def_value: 0
low_lim: -20
high_lim: 20
state_quant: Instrument - Slot4
state_value_1: Oscilloscope
section: Slot 4
group: Trigger



[OSC Trigger Mode - 4]
datatype: COMBO
combo_def_1: Auto
combo_def_2: Normal
state_quant: Instrument - Slot4
state_value_1: Oscilloscope
section: Slot 4
group: Trigger


[OSC Trigger Edge Type - 4]
datatype: COMBO
combo_def_1: Rising
combo_def_2: Falling
combo_def_3: Both
state_quant: Instrument - Slot4
state_value_1: Oscilloscope
section: Slot 4
group: Trigger

[OSC Trigger Nth Event - 4]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 65535
state_quant: Instrument - Slot4
state_value_1: Oscilloscope
section: Slot 4
group: Trigger

[OSC Trigger Holdoff Time - 4]
datatype: DOUBLE
unit: s
def_value: 0
low_lim: 0
high_lim: 10
state_quant: Instrument - Slot4
state_value_1: Oscilloscope
section: Slot 4
group: Trigger

[OSC Trigger Noise Reject - 4]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot4
state_value_1: Oscilloscope
section: Slot 4
group: Trigger

[OSC Trigger HF Reject - 4]
datatype: BOOLEAN
def_value: 0
state_quant: Instrument - Slot4
state_value_1: Oscilloscope
section: Slot 4
group: Trigger



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

[AWG Ch1 Enable Output - 4]
datatype: BOOLEAN
def_value: 1
state_quant: Instrument - Slot4
state_value_1: ArbitraryWaveformGenerator
section: Slot 4

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

[AWG Ch2 Enable Output - 4]
datatype: BOOLEAN
def_value: 1
state_quant: Instrument - Slot4
state_value_1: ArbitraryWaveformGenerator
section: Slot 4
group: Channel 2

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

