# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Moku Pro Oscilloscope

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Moku_Pro_Oscilloscope

# Define that the driver is a Signal Generator
signal_generator: True

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
[IP]
datatype: STRING
def_value: [fe80:0000:0000:0000:7269:79ff:feb0:0470%3]
section: Moku Settings


[Time Span]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9

[Frequency]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6


[Data - Ch1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ



[Data - Ch2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ



[Data - Ch3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ


[Data - Ch4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ



[Acquisition Mode]
datatype: COMBO
combo_def_1: Normal
combo_def_2: Precision
combo_def_3: PeakDetect

group: Trigger

[Trigger Source]
datatype: COMBO
combo_def_1: ChannelA
combo_def_2: ChannelB
combo_def_3: ChannelC
combo_def_4: ChannelD
combo_def_5: Input1
combo_def_6: Input2
combo_def_7: Input3
combo_def_8: Input4
combo_def_9: Output1
combo_def_10: Output2
combo_def_11: Output3
combo_def_12: Output4
combo_def_13: External

group: Trigger

[Trigger Level]
datatype: DOUBLE
low_lim: -20
high_lim: 20

group: Trigger



[Trigger Mode]
datatype: COMBO
combo_def_1: Auto
combo_def_2: Normal

group: Trigger


[Trigger Edge Type]
datatype: COMBO
combo_def_1: Rising
combo_def_2: Falling
combo_def_3: Both

group: Trigger

[Trigger Nth Event]
datatype: DOUBLE
unit: s
def_value: 1
low_lim: 1
high_lim: 65535

group: Trigger

[Trigger Holdoff Time]
datatype: DOUBLE
unit: s
def_value: 0
low_lim: 0
high_lim: 10

group: Trigger

[Trigger Noise Reject]
datatype: BOOLEAN
def_value: 0

group: Trigger

[Trigger HF Reject]
datatype: BOOLEAN
def_value: 0

group: Trigger


