# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Moku Pro Spectrum Analyzer

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Moku_Pro_SpectrumAnalyzer

# Define that the driver is a Signal Generator
signal_generator: True

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
[IP]
datatype: STRING
def_value: [fe80:0000:0000:0000:7269:79ff:feb0:0470%3]
section: Moku Settings


[Input Ch1 - Coupling]
datatype: COMBO
combo_def_1: DC
combo_def_2: AC
group: Inputs
[Input Ch1 - Impedance]
datatype: COMBO
combo_def_1: 50Ohm
combo_def_2: 1MOhm
group: Inputs

[Input Ch1 - Range]
datatype: COMBO
combo_def_1: 400mVpp
combo_def_2: 4Vpp
combo_def_3: 40Vpp
group: Inputs

[Input Ch2 - Coupling]
datatype: COMBO
combo_def_1: DC
combo_def_2: AC
group: Inputs
[Input Ch2 - Impedance]
datatype:COMBO
combo_def_1: 50Ohm
combo_def_2: 1MOhm
group: Inputs

[Input Ch2 - Range]
datatype: COMBO
combo_def_1: 400mVpp
combo_def_2: 4Vpp
combo_def_3: 40Vpp
group: Inputs

[Frequency Lower Bound]
datatype: DOUBLE
unit: Hz
def_value: 1
low_lim: 0
group: Frequency
[Frequency Upper Bound]
datatype: DOUBLE
unit: Hz
def_value: 1
low_lim: 0
high_lim: 300E6
group: Frequency

[Resolution Mode]
datatype: COMBO
def_value: Auto
combo_def_1: Auto
combo_def_2: Manual
combo_def_3: Minimum
group: Resolution

[Resolution Bandwidth]
datatype: DOUBLE
unit: Hz
def_value: 5000
state_quant: Resolution Mode
state_value_1: Manual
group: Resolution

[Window Function]
datatype: COMBO
combo_def_1: BlackmanHarris
combo_def_2: FlatTop
combo_def_3: Rectangular
combo_def_4: Bartlett
combo_def_5: Hamming
combo_def_6: Hann
combo_def_7: Nuttall
combo_def_8: Gaussian
combo_def_9: Kaiser
group: Resolution


[Data - Ch1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ



