# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: RS PRO Multimeter 906X

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
#driver_path:


[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

# List of models supported by this driver
model_str_1: 906X


# Valid model strings returned by the instrument. Default value = model_str
model_id_1: RSDM9061


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
#init: :SOUR:CURR:MODE FIXED;:SOUR:VOLT:MODE FIXED
init: *RST

# Final commands sent to the instrument when closing the driver
final:


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
#For Further Updates use the following website, use commands from the [SENSE] Section to configure the device
#https://docs.rs-online.com/608f/A700000008412086.pdf
[Function]
datatype: COMBO
def_value: Voltage DC
combo_def_1: Voltage DC
combo_def_2: Voltage AC
combo_def_3: Current DC
combo_def_4: Current AC
combo_def_5: Resistance (2-wire)
combo_def_6: Resistance (4-wire)
combo_def_7: Capacitance
combo_def_8: Diode
combo_def_9: Temperature
cmd_def_1: "VOLT"
cmd_def_2: "VOLT:AC"
cmd_def_3: "CURR"
cmd_def_4: "CURR:AC"
cmd_def_5: "RES"
cmd_def_6: "FRES"
cmd_def_7: "CAP"
cmd_def_8: "DIOD"
cmd_def_9: "TEMP"
set_cmd: SENS:FUNC

[Auto-zero]
datatype: BOOLEAN
def_value: True
set_cmd: :ZERO:AUTO
state_quant: Function
state_value_1: Voltage DC
state_value_2: Current DC
state_value_3: Resistance (2-wire)


[Voltage]
datatype: DOUBLE
unit: V
permission: READ
get_cmd: :READ?
state_quant: Function
state_value_1: Voltage DC
state_value_2: Voltage AC

[Auto-range (V_DC)]
datatype: BOOLEAN
def_value: True
set_cmd: :VOLT:DC:RANG:AUTO
group: Input config
state_quant: Function
state_value_1: Voltage DC

[Range (V_DC)]
datatype: COMBO
def_value: 1 V
combo_def_1: 1000 V
combo_def_2: 100 V
combo_def_3: 10 V
combo_def_4: 1 V
combo_def_5: 100 mV
cmd_def_1: +1.00000000E+03
cmd_def_2: +1.00000000E+02
cmd_def_3: +1.00000000E+01
cmd_def_4: +1.00000000E+00
cmd_def_5: +1.00000000E-01
set_cmd: :VOLT:DC:RANG
group: Input config
state_quant: Auto-range (V_DC)
state_value_1: Off

[Auto Impedance (V_DC)]
datatype: BOOLEAN
def_value: True
set_cmd: :VOLT:DC:IMP:AUTO
group: Input config
state_quant: Function
state_value_1: Voltage DC

[Integration Time (V_DC)]

datatype: COMBO
def_value: 1 s
combo_def_1: 12 s
combo_def_2: 3 s
combo_def_3: 1 s
combo_def_4: 600 ms
combo_def_5: 150 ms
combo_def_6: 50 ms
combo_def_7: 25 ms
combo_def_8: 12.5 ms
combo_def_9: 8.3 ms
combo_def_10: 6 ms
cmd_def_1: 12
cmd_def_2: 3
cmd_def_3: 1
cmd_def_4: 0.6
cmd_def_5: 0.15
cmd_def_6: 0.05
cmd_def_7: 0.025
cmd_def_8: 0.0125
cmd_def_9: 0.0083
cmd_def_10: 0.006
set_cmd: :VOLT:DC:NPLC 
get_cmd: :VOLT:DC:NPLC?
state_quant: Function
state_value_1: Voltage DC

[Bandwidth (V_AC)]
datatype: COMBO
def_value: 20 Hz - 300 KHz
combo_def_1: 3 Hz - 300 KHz
combo_def_2: 20 Hz - 300 KHz
combo_def_3: 200 Hz - 300 KHz
cmd_def_1: +3.00000000E+00
cmd_def_2: +2.00000000E+01
cmd_def_3: +2.00000000E+02
set_cmd: :VOLT:AC:BAND
state_quant: Function
state_value_1: Voltage AC

[Integration Time (I_DC)]
datatype: COMBO
def_value: 1 s
combo_def_1: 12 s
combo_def_2: 3 s
combo_def_3: 1 s
combo_def_4: 600 ms
combo_def_5: 150 ms
combo_def_6: 50 ms
combo_def_7: 25 ms
combo_def_8: 12.5 ms
combo_def_9: 8.3 ms
combo_def_10: 6 ms
cmd_def_1: 12
cmd_def_2: 3
cmd_def_3: 1
cmd_def_4: 0.6
cmd_def_5: 0.15
cmd_def_6: 0.05
cmd_def_7: 0.025
cmd_def_8: 0.0125
cmd_def_9: 0.0083
cmd_def_10: 0.006
set_cmd: :CURR:DC:NPLC 
get_cmd: :CURR:DC:NPLC?
state_quant: Function
state_value_1: Current DC


[Auto-range (I_DC)]
datatype: BOOLEAN
def_value: True
set_cmd: :CURR:DC:RANG:AUTO
group: Input config
state_quant: Function
state_value_1: Current DC

[Range (I_DC)]
datatype: COMBO
def_value: 1 mA
combo_def_1: 10 A
combo_def_2: 3 A
combo_def_3: 1 A
combo_def_4: 100 mA
combo_def_5: 10 mA
combo_def_6: 1 mA
combo_def_7: 0.1 mA
cmd_def_1: 10
cmd_def_2: 3
cmd_def_3: 1
cmd_def_4: 100E-3
cmd_def_5: 10E-3
cmd_def_6: 1E-3
cmd_def_7: 1E-4
set_cmd: :CURR:DC:RANG
group: Input config
state_quant: Auto-range (I_DC)
state_value_1: FALSE

[Bandwidth (I_AC)]
datatype: COMBO
def_value: 20 Hz - 300 KHz
combo_def_1: 3 Hz - 300 KHz
combo_def_2: 20 Hz - 300 KHz
combo_def_3: 200 Hz - 300 KHz
cmd_def_1: +3.00000000E+00
cmd_def_2: +2.00000000E+01
cmd_def_3: +2.00000000E+02
set_cmd: :CURR:AC:BAND
state_quant: Function
state_value_1: Current AC

[Current]
datatype: DOUBLE
unit: A
permission: READ
get_cmd: :READ?
state_quant: Function
state_value_1: Current DC
state_value_2: Current AC

[Resistance]
datatype: DOUBLE
unit: Ohm
permission: READ
get_cmd: :READ?
state_quant: Function
state_value_1: Resistance (2-wire)
state_value_2: Resistance (4-wire)

[Capacitance]
datatype: DOUBLE
unit: Farad
permission: READ
get_cmd: READ?
state_quant: Function
state_value_1: Capacitance

[Diode]
datatype: DOUBLE
permission: READ
get_cmd: READ?
state_quant: Function
state_value_1: Diode

[Temperature]
datatype: DOUBLE
unit: Kelvin
permission: READ
get_cmd: READ?
state_quant: Function
state_value_1: Temperature